PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = pygame
  Data filename = u'data/%s_%s_%s_%s_%s_%s' % (expInfo['이름'], expName, expInfo['date'], expInfo['성별'], expInfo['나이'], expInfo['검사일'])
  Experiment info = {'이름': '', '성별': '', '나이': '', '검사일': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save hdf5 file = True
  Save wide csv file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = Experimental Setting
  keyboardBackend = ioHub
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Routines
  Routine Naming_Test
    ImageComponent image_3
      image [set every repeat] = $Picture
      size = (0.75, 0.75)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Naming_Test_2
    ImageComponent image
      image [set every repeat] = $Picture
      size = (0.75,0.75)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'Left', 'Right', 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine END
    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = 끝!
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  Routine feedback
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        msg=""
      Begin Routine:
        if key_resp_8.corr==1:#정답인 경우
            msg='정답입니다!'
            fb_color='black'
        elif key_resp_8.corr==0:#오답인 경우
            msg='틀렸습니다!'
            fb_color='red'
    TextComponent msg_feedback
      color [set every repeat] = $color
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
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  Routine SpeechPerception_Start
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = 말지각 검사
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    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice
    ImageComponent foot_2
      image = 발.jpg
      pos = (-0.3, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent horse_2
      image = 말.jpg
      pos = (+0.3, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent Leftpolygon_4
      fillColor = blue
      pos = (-0.3, 0.325)
      shape = triangle
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
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    PolygonComponent Rightpolygon_4
      fillColor = yellow
      pos = (+0.3, 0.325)
      shape = circle
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_12
      allowedKeys = 'space'
      correctAns = 'a'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice_sound
    ImageComponent foot
      image = 발.jpg
      pos = (-0.3, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent horse
      image = 말.jpg
      pos = (+0.3, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_11
      allowedKeys = 'a', 'l'
      correctAns = 'a'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    PolygonComponent Leftpolygon_2
      fillColor = blue
      pos = (-0.3, 0.325)
      shape = triangle
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
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    PolygonComponent Rightpolygon_2
      fillColor = yellow
      pos = (+0.3, 0.325)
      shape = circle
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
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    SoundComponent sound_5
      sound = 발.wav
      startVal [time (s)] = 0
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  Routine b
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        연습문제 풀어볼까요?

        말소리를 잘 듣고 두 개의 그림 중 알맞은 그림을 골라주세요!
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SP_practice
    SoundComponent sound_4
      sound [set every repeat] = $Sound
      startVal [time (s)] = 0.0
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    ImageComponent Left
      image [set every repeat] = $LeftPic
      pos = (-0.3, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent Right
      image [set every repeat] = $RightPic
      pos = (+0.3, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_8
      allowedKeys = 'a', 'l'
      correctAns = $CorrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    PolygonComponent Leftpolygon
      fillColor = blue
      pos = (-0.3, 0.325)
      shape = triangle
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
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    PolygonComponent Rightpolygon
      fillColor = yellow
      pos = (+0.3, 0.325)
      shape = circle
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
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  Routine SP
    SoundComponent sound_1
      sound [set every repeat] = $Sound
      startVal [time (s)] = 0
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    ImageComponent LeftStim
      image [set every repeat] = $LeftPic
      pos = (-0.3, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
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    ImageComponent RightStim
      image [set every repeat] = $RightPic
      pos = (+0.3, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
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    KeyboardComponent key_resp
      allowedKeys = 'a', 'l'
      correctAns = $CorrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    PolygonComponent Leftpolygon_3
      fillColor = blue
      pos = (-0.3, 0.325)
      shape = triangle
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
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    PolygonComponent Rightpolygon_3
      fillColor = yellow
      pos = (+0.3, 0.325)
      shape = circle
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
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  Routine PhonologicalRepresentation_Start
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = 음운표상 검사
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    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine a_2
    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        이제 시작할거예요!

        어떻게 하는지 설명해줄게요!
    KeyboardComponent key_resp_13
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice_2
    ImageComponent pants
      image = 바지.jpg
      size = (0.75, 0.75)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_15
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice_sound_2
    SoundComponent sound_6
      sound = 바지.wav
      startVal [time (s)] = 0.0
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    ImageComponent pants_2
      image = 바지.jpg
      size = (0.75, 0.75)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_16
      allowedKeys = 'q', 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine b_2
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        이제 연습문제를 풀어볼거예요!

        말소리를 잘 듣고 말소리랑 그림이랑 맞으면 'O', 틀리면 'X' 눌러주면 돼요!
    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine PR_practice
    ImageComponent image_6
      image [set every repeat] = $Picture
      size = (0.75, 0.75)
      startVal [time (s)] = 0
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    SoundComponent sound_3
      sound [set every repeat] = $Sound
      startVal [time (s)] = 0
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    KeyboardComponent key_resp_9
      allowedKeys = 'q', 'p'
      correctAns = $CorrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine c_2
    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = 연습문제 끝났어요!
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    TextComponent text_9
      letterHeight = 0.05
      startVal [time (s)] = 2
      text = 검사 시작할게요!
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    KeyboardComponent key_resp_14
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine PR
    SoundComponent sound_2
      sound [set every repeat] = $Sound
      startVal [time (s)] = 0.0
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    ImageComponent image_2
      image [set every repeat] = $Picture
      size = (0.75, 0.75)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      allowedKeys = 'q', 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine SpeechPerception_Start
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = 말지각 이름대기.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Picture': '귀.jpg'},
      {'Picture': '감다.jpg'},
      {'Picture': '끄다.jpg'},
      {'Picture': '콩.jpg'},
      {'Picture': '손.jpg'},
      {'Picture': '살다.jpg'},
      {'Picture': '쌀.jpg'},
      {'Picture': '싸다.jpg'},
      {'Picture': '자르다.jpg'},
      {'Picture': '작다.jpg'},
      {'Picture': '짜다.jpg'},
      {'Picture': '차다.jpg'},
      {'Picture': '십.jpg'},
      {'Picture': '사다.jpg'},
      {'Picture': '씻다.jpg'},
      {'Picture': '뒤.jpg'},
      {'Picture': '담다.jpg'},
      {'Picture': '뜨다.jpg'},
      {'Picture': '통.jpg'},
      {'Picture': '돈.jpg'},
      {'Picture': '달다.jpg'},
      {'Picture': '딸.jpg'},
      {'Picture': '타다.jpg'},
      {'Picture': '다르다.jpg'},
      {'Picture': '닦다.jpg'},
      {'Picture': '따다.jpg'},
      {'Picture': '집.jpg'},
      {'Picture': '자다.jpg'},
      {'Picture': '찢다.jpg'}]
    Routine Naming_Test_2
  LoopTerminator trials_2
  Routine a_2
  Routine practice
  Routine practice_sound
  Routine b
  LoopInitiator trials_6 loopType="TrialHandler"
    conditionsFile = 말지각 연습문제.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'LeftPic': '소.jpg', 'RightPic': '초.jpg', 'Sound': '초.wav', 'CorrAns': 'l'},
      {'LeftPic': '강.jpg', 'RightPic': '땅.jpg', 'Sound': '강.wav', 'CorrAns': 'a'}]
    Routine SP_practice
  LoopTerminator trials_6
  Routine c_2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = 말지각 단어리스트29.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'LeftPic': '쌀.jpg', 'RightPic': '딸.jpg', 'Sound': '쌀.wav', 'CorrAns': 'a'},
      {'LeftPic': '끄다.jpg', 'RightPic': '뜨다.jpg', 'Sound': '뜨다.wav', 'CorrAns': 'l'},
      {'LeftPic': '살다.jpg', 'RightPic': '달다.jpg', 'Sound': '달다.wav', 'CorrAns': 'l'},
      {'LeftPic': '사다.jpg', 'RightPic': '자다.jpg', 'Sound': '자다.wav', 'CorrAns': 'l'},
      {'LeftPic': '손.jpg', 'RightPic': '돈.jpg', 'Sound': '손.wav', 'CorrAns': 'a'},
      {'LeftPic': '뒤.jpg', 'RightPic': '귀.jpg', 'Sound': '뒤.wav', 'CorrAns': 'a'},
      {'LeftPic': '씻다.jpg', 'RightPic': '찢다.jpg', 'Sound': '찢다.wav', 'CorrAns': 'l'},
      {'LeftPic': '짜다.jpg', 'RightPic': '따다.jpg', 'Sound': '짜다.wav', 'CorrAns': 'a'},
      {'LeftPic': '콩.jpg', 'RightPic': '통.jpg', 'Sound': '콩.wav', 'CorrAns': 'a'},
      {'LeftPic': '차다.jpg', 'RightPic': '싸다.jpg', 'Sound': '싸다.wav', 'CorrAns': 'l'},
      {'LeftPic': '감다.jpg', 'RightPic': '담다.jpg', 'Sound': '감다.wav', 'CorrAns': 'a'},
      {'LeftPic': '통.jpg', 'RightPic': '콩.jpg', 'Sound': '콩.wav', 'CorrAns': 'l'},
      {'LeftPic': '차다.jpg', 'RightPic': '싸다.jpg', 'Sound': '차다.wav', 'CorrAns': 'a'},
      {'LeftPic': '뜨다.jpg', 'RightPic': '끄다.jpg', 'Sound': '뜨다.wav', 'CorrAns': 'a'},
      {'LeftPic': '찢다.jpg', 'RightPic': '씻다.jpg', 'Sound': '찢다.wav', 'CorrAns': 'a'},
      {'LeftPic': '귀.jpg', 'RightPic': '뒤.jpg', 'Sound': '뒤.wav', 'CorrAns': 'l'},
      {'LeftPic': '끄다.jpg', 'RightPic': '뜨다.jpg', 'Sound': '끄다.wav', 'CorrAns': 'a'},
      {'LeftPic': '쌀.jpg', 'RightPic': '딸.jpg', 'Sound': '딸.wav', 'CorrAns': 'l'},
      {'LeftPic': '싸다.jpg', 'RightPic': '타다.jpg', 'Sound': '싸다.wav', 'CorrAns': 'a'}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
    Routine SP
  LoopTerminator trials
  Routine PhonologicalRepresentation_Start
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = 음운표상 이름대기.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Picture': '기저귀.jpg'},
      {'Picture': '거북이.jpg'},
      {'Picture': '개구리.jpg'},
      {'Picture': '지갑.jpg'},
      {'Picture': '젓가락.jpg'},
      {'Picture': '쟁반.jpg'},
      {'Picture': '신발.jpg'},
      {'Picture': '선물.jpg'},
      {'Picture': '색연필.jpg'}]
    Routine Naming_Test
  LoopTerminator trials_4
  Routine a_2
  Routine practice_2
  Routine practice_sound_2
  Routine b_2
  LoopInitiator trials_5 loopType="TrialHandler"
    conditionsFile = 음운표상 연습문제.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Picture': '부엉이.jpg', 'Sound': '부엉이.wav', 'CorrAns': 'q'},
      {'Picture': '비행기.jpg', 'Sound': '바행기.wav', 'CorrAns': 'p'}]
    Routine PR_practice
  LoopTerminator trials_5
  Routine c_2
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = 음운표상 단어리스트29.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Picture': '색연필.jpg', 'Sound': '댁연필.wav', 'CorrAns': 'p'},
      {'Picture': '거북이.jpg', 'Sound': '거북이.wav', 'CorrAns': 'q'},
      {'Picture': '지갑.jpg', 'Sound': '지갑.wav', 'CorrAns': 'q'},
      {'Picture': '개구리.jpg', 'Sound': '개구리.wav', 'CorrAns': 'q'},
      {'Picture': '기저귀.jpg', 'Sound': '게저귀.wav', 'CorrAns': 'p'},
      {'Picture': '쟁반.jpg', 'Sound': '쟁반.wav', 'CorrAns': 'q'},
      {'Picture': '선생님.jpg', 'Sound': '슨생님.wav', 'CorrAns': 'p'},
      {'Picture': '지갑.jpg', 'Sound': '저갑.wav', 'CorrAns': 'p'},
      {'Picture': '개구리.jpg', 'Sound': '배구리.wav', 'CorrAns': 'p'},
      {'Picture': '시소.jpg', 'Sound': '시소.wav', 'CorrAns': 'q'},
      {'Picture': '지갑.jpg', 'Sound': '디갑.wav', 'CorrAns': 'p'},
      {'Picture': '선생님.jpg', 'Sound': '던생님.wav', 'CorrAns': 'p'},
      {'Picture': '기저귀.jpg', 'Sound': '기저귀.wav', 'CorrAns': 'q'},
      {'Picture': '색연필.jpg', 'Sound': '석연필.wav', 'CorrAns': 'p'},
      {'Picture': '거북이.jpg', 'Sound': '버북이.wav', 'CorrAns': 'p'},
      {'Picture': '개구리.jpg', 'Sound': '개구리.wav', 'CorrAns': 'q'},
      {'Picture': '기저귀.jpg', 'Sound': '그저귀.wav', 'CorrAns': 'p'},
      {'Picture': '쟁반.jpg', 'Sound': '댕반.wav', 'CorrAns': 'p'},
      {'Picture': '선생님.jpg', 'Sound': '신생님.wav', 'CorrAns': 'p'},
      {'Picture': '개구리.jpg', 'Sound': '매구리.wav', 'CorrAns': 'p'},
      {'Picture': '지갑.jpg', 'Sound': '지갑.wav', 'CorrAns': 'q'},
      {'Picture': '개구리.jpg', 'Sound': '거구리.wav', 'CorrAns': 'p'},
      {'Picture': '거북이.jpg', 'Sound': '거북이.wav', 'CorrAns': 'q'},
      {'Picture': '선생님.jpg', 'Sound': '전생님.wav', 'CorrAns': 'p'},
      {'Picture': '쟁반.jpg', 'Sound': '쟁반.wav', 'CorrAns': 'q'},
      {'Picture': '지갑.jpg', 'Sound': '치갑.wav', 'CorrAns': 'p'}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
    Routine PR
  LoopTerminator trials_3
  Routine END
